CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "red")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "blue")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "red")
    Name to assign these images:cellbody
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):9,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0065,1.0
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:cellbody
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0062,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:RFP
    Name the output image:Enhance_SGs
    Select the operation:Enhance
    Feature size:6
    Feature type:Speckles
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    Speed and accuracy:Fast

MaskImage:[module_num:8|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
    Select the input image:Enhance_SGs
    Name the output image:MaskGranules
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:MaskGranules
    Name the primary objects to be identified:Stress_granules
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.0079
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Nuclei
    Select objects to measure:Stress_granules
    Calculate the Zernike features?:No

MeasureImageAreaOccupied:[module_num:11|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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Nuclei
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Stress_granules
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
ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_Nuclei,Image|Count_Stress_granules,Image|AreaOccupied_Perimeter_Nuclei,Image|AreaOccupied_Perimeter_Stress_granules,Image|AreaOccupied_AreaOccupied_Nuclei,Image|AreaOccupied_AreaOccupied_Stress_granules,Image|AreaOccupied_TotalArea_Stress_granules,Image|AreaOccupied_TotalArea_Nuclei,Image|FileName_cellbody,Experiment|Run_Timestamp,Experiment|Pipeline_Pipeline,Experiment|CellProfiler_Version,Stress_granules|Number_Object_Number,Stress_granules|AreaShape_Perimeter,Stress_granules|AreaShape_FormFactor,Stress_granules|AreaShape_Orientation,Stress_granules|AreaShape_MajorAxisLength,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
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